---
API: 2
OpenSesame: 3.0.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "RRT.sc1"
set subject_parity even
set subject_nr 0
set start experiment
set sampler_backend legacy
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set foreground white
set font_size 18
set font_italic no
set font_family hebrew
set font_bold no
set experiment_path "C:\\Users\\micha\\Dropbox\\Git\\RRT-sc1-OpenSesame"
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence Block1_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_1 always
	run block1_trial_loop always

define sequence Block2_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_2 always
	run block2_trial_loop always

define sequence Block3_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_34 always
	run block3_trial_loop always

define sequence Block5_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_5 always
	run block5_trial_loop always

define sequence Block6_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_67 always
	run block6_trial_loop always

define form_multiple_choice DominantHand
	set timeout infinite
	set spacing 10
	set question "What is you dominant hand?"
	__options__
	Right
	Left
	__end__
	set margins "50;50;50;50"
	set form_var handdom
	set form_title "Dominant Hand"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately no
	set _theme gray

define sequence RRT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blocks1 always
	run blocks2 always
	run blocks3_4 always
	run blocks5 always
	run blocks67 always
	run end always
	run end_y always
	run make_sure_real_end always
	run logger always

define inline_script adjITI_py
	set description "Executes Python code"
	___run__
	t_start = clock.time()
	
	iti = 750 - 5 #Desired ITI
	iti_overhead = t_start - t_endoftrial #Overhead time
	
	#extra ITI for the blank screen
	adjiti = iti - iti_overhead
	
	#Output times
	#print("adjITI")
	#print(adjiti)
	
	#print("total ITI")
	#print(adjiti + iti_overhead)
	
	#Actual sleep function to compensate for variable sequence preparation time.
	self.sleep(int(adjiti))
	
	#print("Elapsed: ")
	#print(clock.time() - t_endoftrial)
	__end__
	set _prepare ""

define form_text_input age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title "Age?"
	set form_question "What's your age?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop block1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Block1_seq
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order "practice;blockno"
	set break_if never
	setcycle 0 practice "yes"
	setcycle 0 blockno "1"
	run Block1_seq

define sequence block1_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst1_1_f always
	run spacer always
	run inst1_2_f always

define sequence block1_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst1_1_m always
	run spacer always
	run inst1_2_m always

define loop block1_trial_loop
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles "[=len(arrayStim)]"
	set column_order ""
	set break_if never
	run trial_sequence

define loop block2
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Block2_seq
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order "practice;blockno"
	set break_if never
	setcycle 0 practice "yes"
	setcycle 0 blockno "2"
	run Block2_seq

define sequence block2_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst2_1_f_Atrue "=schighfirst==1"
	run inst2_1_f_Afalse "=schighfirst==0"
	run spacer always
	run inst2_2_f_Atrue "=schighfirst==1"
	run inst2_2_f_Afalse "=schighfirst==0"

define sequence block2_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst2_1_m_Atrue "=schighfirst==1"
	run inst2_1_m_Afalse "=schighfirst==0"
	run spacer always
	run inst2_2_m_Atrue "=schighfirst==1"
	run inst2_2_m_Afalse "=schighfirst==0"

define loop block2_trial_loop
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles "[=len(arrayStim)]"
	set column_order ""
	set break_if never
	run trial_sequence

define loop block3_4
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item Block3_seq
	set description "Repeatedly runs another item"
	set cycles 2
	set column_order "practice;blockno"
	set break_if never
	setcycle 0 practice "no"
	setcycle 0 blockno "3"
	setcycle 1 practice "no"
	setcycle 1 blockno "4"
	run Block3_seq

define sequence block3_4_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst34_f_Atrue "=schighfirst==1"
	run inst34_f_Afalse "=schighfirst==0"

define sequence block3_4_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst34_m_Atrue "=schighfirst==1"
	run inst34_m_Afalse "=schighfirst==0"

define loop block3_trial_loop
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles "[=len(arrayStim)]"
	set column_order ""
	set break_if never
	run trial_sequence

define loop block5
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Block5_seq
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order "practice;blockno"
	set break_if never
	setcycle 0 practice "yes"
	setcycle 0 blockno "5"
	run Block5_seq

define sequence block5_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst5_1_f_Atrue "=schighfirst==0"
	run inst5_1_f_Afalse "=schighfirst==1"
	run spacer always
	run inst5_2_f_Atrue "=schighfirst==0"
	run inst5_2_f_Afalse "=schighfirst==1"

define sequence block5_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst5_1_m_Atrue "=schighfirst==0"
	run inst5_1_m_Afalse "=schighfirst==1"
	run spacer always
	run inst5_2_m_Atrue "=schighfirst==0"
	run inst5_2_m_Afalse "=schighfirst==1"

define loop block5_trial_loop
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles "[=len(arrayStim)]"
	set column_order ""
	set break_if never
	run trial_sequence

define loop block6_7
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item Block6_seq
	set description "Repeatedly runs another item"
	set cycles 2
	set column_order "practice;blockno"
	set break_if never
	setcycle 0 practice "no"
	setcycle 0 blockno "6"
	setcycle 1 practice "no"
	setcycle 1 blockno "7"
	run Block6_seq

define sequence block6_7_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst67_f_Atrue "=schighfirst==0"
	run inst67_f_Afalse "=schighfirst==1"

define sequence block6_7_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst67_m_Atrue "=schighfirst==0"
	run inst67_m_Afalse "=schighfirst==1"

define loop block6_trial_loop
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles "[=len(arrayStim)]"
	set column_order ""
	set break_if never
	run trial_sequence

define sequence blocks1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block1_female "=sex==u'female'"
	run block1_male "=sex==u'male'"
	run spacer always
	run block1 always

define sequence blocks2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block2_male "=sex==u'male'"
	run block2_female "=sex==u'female'"
	run spacer always
	run block2 always

define sequence blocks3_4
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block3_4_female "=sex==u'female'"
	run block3_4_male "=sex==u'male'"
	run spacer always
	run block3_4 always

define sequence blocks5
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block5_female "=sex==u'female'"
	run block5_male "=sex==u'male'"
	run spacer always
	run block5 always

define sequence blocks67
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block6_7_male "=sex==u'male'"
	run block6_7_female "=sex==u'female'"
	run spacer always
	run block6_7 always

define inline_script check_for_second_chance
	set description "Executes Python code"
	___run__
	# First, check whether the response was correct by using the
	# built-in OpenSesame variable 'correct', It has the
	# value 1 if the most recent response was correct, and the
	# value 0 if it was incorrect.
	# We retrieve this variable by using the experiment function
	# 'self.get()'.
	# If the response was correct, we DON'T need to run the 'second
	# chance' items:
	
	# If the response was correct, we DON'T need to run the 'second
	# chance' items:
	if self.get("correct") == 1:
		exp.set("second_chance", 'no')
	
	# If the response was incorrect, we DO need to run the 'second
	# chance items:
	elif self.get("correct") == 0:
		exp.set("second_chance", 'yes')
	__end__
	set _prepare ""

define inline_script define_functions
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	def exrandom(array, length):
	#   exuastive sampling from a list. if the length of the new list is greater
	#   than the length of the original list, the original list is reshuffeled and
	#   added again. this minimizes duplicates in the final list.
	#   Usage: exrandom(array, int length)
	   temp_array = []
	   out_array = []
	   temp_array.extend(array)
	   random.shuffle(temp_array)
	   #take care of the modulo first
	   for i in range(0,length%len(array)):
		   out_array.append(temp_array.pop(1))
	   length = length - length%len(array)
	
	#   now let's deal with the integer division
	#   this runs even if the integer division == 0, but then extends the list by 0
	   while length >= len(array):
		  temp_array = []
		  temp_array.extend(array)
		  random.shuffle(temp_array)
		  out_array.extend(temp_array)
		  length = length - len(array)
	
	   out_array.reverse()
	   
	   return out_array;
	   
	def splitLines(stim,limit):
	#   split the stim to two lines, slice at the middle space, if the stim is more than 'limit' char long.
	#   Usage: name of var for first line, name of var for second line = splitLines(input stim,char limit criterion to split)
	#   Usually: lineA , lineB =  splitLines(stim,40)
	   outA = u' '
	   outB = u' '
	   inStim = stim
	   inStimHalfLen = len(inStim)/2
	   if len(inStim)<=limit:
		   outA = inStim
		   outB = u' '
	   else:
		   #get all indexs of ' ', if they are after the half of the stim, so lineB would be shorter then lineA.
		  spacesRelativeMiddle = [i - inStimHalfLen for i, ltr in enumerate(inStim) if ltr == u' ' and (i - inStimHalfLen)>=0]
		  outA = inStim[:min(spacesRelativeMiddle)+inStimHalfLen]
		  outB = inStim[min(spacesRelativeMiddle)+inStimHalfLen:]
	   
	   return outA , outB
	__end__

define form_text_input email
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var email
	set form_title email
	set form_question "E-mail address?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad end
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="הגעת לסוף המטלה.<br /><br />תודה על השתתפותך בניסוי." x=0 y=0 z_index=0

define keyboard_response end_y
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses y

define sketchpad endoftrial
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catTrue]" x=384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catFalse]" x=-384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'q'" x=-384 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'p'" x=384 y=-320 z_index=0

define inline_script endoftrial_py
	set description "Executes Python code"
	___run__
	t_endoftrial = clock.time()
	trialCounter = trialCounter + 1
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_order_by_Sub_nr always
	run define_functions always
	run age always
	run DominantHand always
	run gender always
	run logger always
	run init_stim always
	run RRT always

define keyboard_response first_chance_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response]"
	set allowed_responses "p;q"

define sketchpad first_chance_stim
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_a]" x=0 y=-24 z_index=0
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_b]" x=0 y=24 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catTrue]" x=384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catFalse]" x=-384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'q'" x=-384 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'p'" x=384 y=-320 z_index=0

define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question "Gender?"
	__options__
	Male
	Female
	__end__
	set margins "50;50;50;50"
	set form_var sex
	set form_title Gender
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_input id4digits
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var id4dig
	set form_title "תעודת זהות"
	set form_question "Last 4 digits of ID?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_script init_iti_stim_1
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 5 'true' words and 5 'false' words, each word is displyed 4 times.
	
	arrayblock1_source = []
	arrayblock1_source.extend(arrayTrue)
	arrayblock1_source.extend(arrayFalse)
	
	arrayStim = exrandom(arrayblock1_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_2
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 5 'true' props and 5 'false' props, each prop is displyed 4 times.
	
	arrayblock2_source = []
	arrayblock2_source.extend(arrayATrue)
	arrayblock2_source.extend(arrayAFalse)
	
	arrayStim = exrandom(arrayblock2_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_34
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 5 'true' props, 5 'false' props, 5 true words and 5 false words. each stimis displyed twice.
	
	arrayblock34_source = []
	arrayblock34_source.extend(arrayATrue)
	arrayblock34_source.extend(arrayAFalse)
	arrayblock34_source.extend(arrayFalse)
	arrayblock34_source.extend(arrayTrue)
	
	arrayStim = exrandom(arrayblock34_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_5
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 10 'true' props and 10 'false' props, each prop is displyed twice.
	
	arrayblock5_source = []
	arrayblock5_source.extend(arrayATrue)
	arrayblock5_source.extend(arrayAFalse)
	
	arrayStim = exrandom(arrayblock5_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_67
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 5 'true' props, 5 'false' props, 5 true words and 5 false words. each stimis displyed twice.
	
	arrayblock67_source = []
	arrayblock67_source.extend(arrayATrue)
	arrayblock67_source.extend(arrayAFalse)
	arrayblock67_source.extend(arrayFalse)
	arrayblock67_source.extend(arrayTrue)
	
	arrayStim = exrandom(arrayblock67_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_stim
	set description "Executes Python code"
	___run__
	#gender specific items:
	if var.sex == u'Male':
	 sex = u'male'
	 var.propAtrue1 = u'יש לי נטייה להיות מאוד ביקורתי כלפי עצמי'  
	 var.propAfalse1 = u'אין לי נטייה להיות מאוד ביקורתי כלפי עצמי'
	 
	if var.sex == u'Female':
	 sex = u'female'
	 var.propAtrue1 = u'יש לי נטייה להיות מאוד ביקורתית כלפי עצמי' 
	 var.propAfalse1 = u'אין לי נטייה להיות מאוד ביקורתית כלפי עצמי'
	
	arrayATrue = [var.propAtrue1, var.propAtrue2,var.propAtrue3, var.propAtrue4, var.propAtrue5]
	arrayAFalse = [var.propAfalse1, var.propAfalse2,var.propAfalse3, var.propAfalse4, var.propAfalse5]
	__end__
	___prepare__
	var.catTrue = u'אמת'
	var.catFalse = u'שקר'
	
	var.true1 = u'נכון'
	var.true2 = u'יושר'
	var.true3 = u'צודק'
	var.true4 = u'מדויק'
	var.true5 = u'ודאי'
	var.false1 = u'שגוי'
	var.false2 = u'טעות'
	var.false3 = u'רמאות'
	var.false4 = u'זיוף'
	var.false5 = u'שיבוש'
	
	var.propA = u"high SC" #these values are not displayed, only logged for convinience..
	var.propB = u"low SC"
	
	var.trueColor = u'orange'
	var.propColor = u'blue'
	
	#propositions are split to two lines later.
	#gender specific items are set at 'run'
	#non-gender specific items:
	var.propAtrue2 = u'קיים הבדל ניכר בין איך שאני היום ואיך שהייתי רוצה להיות'
	var.propAtrue3 = u'אני נוטה לא להיות מרוצה ממה שיש לי'
	var.propAtrue4 = u'קשה לי לקבל את החולשות שלי'
	var.propAtrue5 = u'לעיתים קרובות אני משווה את עצמי לסטנדרטים או מטרות'
	
	var.propAfalse2 = u'אין הבדל ניכר בין איך שאני היום ואיך שהייתי רוצה להיות'
	var.propAfalse3 = u'אני נוטה להיות מרוצה ממה שיש לי'
	var.propAfalse4 = u'לא קשה לי לקבל את החולשות שלי'
	var.propAfalse5 = u'רק לעיתים רחוקות אני משווה את עצמי לסטנדרטים או מטרות'
	
	arrayTrue = [var.true1, var.true2,var.true3, var.true4, var.true5]
	arrayFalse = [var.false1, var.false2,var.false3, var.false4, var.false5]
	__end__

define sketchpad inst1_1_f
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_1f.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst1_1_m
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_1m.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst1_2_f
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_2f.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst1_2_m
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_2m.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script make_sure_real_end
	set description "Executes Python code"
	___run__
	print("real end")
	var.realend = 1
	__end__
	set _prepare ""

define inline_script pickStim
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.stim_word_a, var.stim_word_b = splitLines(arrayStim[trialCounter-1],40)
	
	
	#general, but also for block1
	if arrayStim[trialCounter-1] in arrayTrue:
		var.correct_response = u'p'
		var.stim_color = var.trueColor
	if arrayStim[trialCounter-1] in arrayFalse:
		var.correct_response = u'q'
		var.stim_color = var.trueColor
	
	#for block2 ,block34
	if var.blockno in [2,3,4]:
		if var.schighfirst == 1:
			var.trueProp = var.propA
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-true prop is displayed the correct response is P
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-false prop is displayed the correct response is Q
			
		elif var.schighfirst == 0:
			var.trueProp = var.propB
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-true prop is displayed the correct response is Q
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-false prop is displayed the correct response is P
				
				
	#for block5 ,block67
	elif var.blockno in [5,6,7]:
		if var.schighfirst == 0:
			var.trueProp = var.propA
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-true prop is displayed the correct response is P
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-false prop is displayed the correct response is Q
				
		elif var.schighfirst == 1:
			var.trueProp = var.propB
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-true prop is displayed the correct response is Q
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-false prop is displayed the correct response is P
	__end__

define keyboard_response second_chance_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "[correct_response]"

define sketchpad second_chance_stim
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text=X x=0 y=208 z_index=0
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_a]" x=0 y=-24 z_index=0
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_b]" x=0 y=24 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catTrue]" x=384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catFalse]" x=-384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'q'" x=-384 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'p'" x=384 y=-320 z_index=0

define inline_script set_order_by_Sub_nr
	set description "Executes Python code"
	set _run ""
	___prepare__
	#set order of propositions trueness by modulo of 2 (equal to by parity of subject_nr, but easier to scale this way)
	if var.subject_nr%2 == 1: #this is the result of 'quickrun' mode
		schighfirst = 1 #SelfCritHighFirst
	else:
		schighfirst = 0
	
	
	var.schighfirst = schighfirst	
	print(var.schighfirst)
	__end__

define keyboard_response spacer
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run pickStim always
	run adjITI_py always
	run first_chance_stim always
	run first_chance_response always
	run check_for_second_chance always
	run second_chance_stim "[second_chance]=yes"
	run second_chance_response "[second_chance]=yes"
	run endoftrial always
	run endoftrial_py always
	run logger always

