---
API: 2
OpenSesame: 3.1.4
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "RRT.sc2"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family hebrew
set font_bold no
set experiment_path "D:\\Dropbox (STREALTH)\\Git\\RRT-sc2-OpenSesame Mouse Tracker"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence Block1_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_1 always
	run block1_trial_loop always

define sequence Block2_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_2 always
	run block2_trial_loop always

define sequence Block3_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_34 always
	run block3_trial_loop always

define sequence Block5_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_5 always
	run block5_trial_loop always

define sequence Block6_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_iti_stim_67 always
	run block6_trial_loop always

define sequence DEQ6_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_QUE_gender always
	run QUEinst always
	run QUE always

define form_multiple_choice DominantHand
	set timeout infinite
	set spacing 10
	set question "What is you dominant hand?"
	__options__
	Right
	Left
	__end__
	set margins "50;50;50;50"
	set form_var handdom
	set form_title "Dominant Hand"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately no
	set _theme gray

define loop QUE
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial
	set description "Repeatedly runs another item"
	set cycles 34
	set continuous no
	set column_order "Condition;CategoryLeft;CategoryRight;CategoryCorrect;Exemplar"
	set break_if_on_first yes
	set break_if never
	setcycle 0 QUE_Item "=QUEitems[0]"
	setcycle 1 QUE_Item "=QUEitems[1]"
	setcycle 2 QUE_Item "=QUEitems[2]"
	setcycle 3 QUE_Item "=QUEitems[3]"
	setcycle 4 QUE_Item "=QUEitems[4]"
	setcycle 5 QUE_Item "=QUEitems[5]"
	setcycle 6 QUE_Item "=QUEitems[6]"
	setcycle 7 QUE_Item "=QUEitems[7]"
	setcycle 8 QUE_Item "=QUEitems[8]"
	setcycle 9 QUE_Item "=QUEitems[9]"
	setcycle 10 QUE_Item "=QUEitems[10]"
	setcycle 11 QUE_Item "=QUEitems[11]"
	setcycle 12 QUE_Item "=QUEitems[12]"
	setcycle 13 QUE_Item "=QUEitems[13]"
	setcycle 14 QUE_Item "=QUEitems[14]"
	setcycle 15 QUE_Item "=QUEitems[15]"
	setcycle 16 QUE_Item "=QUEitems[16]"
	setcycle 17 QUE_Item "=QUEitems[17]"
	setcycle 18 QUE_Item "=QUEitems[18]"
	setcycle 19 QUE_Item "=QUEitems[19]"
	setcycle 20 QUE_Item "=QUEitems[20]"
	setcycle 21 QUE_Item "=QUEitems[21]"
	setcycle 22 QUE_Item "=QUEitems[22]"
	setcycle 23 QUE_Item "=QUEitems[23]"
	setcycle 24 QUE_Item "=QUEitems[24]"
	setcycle 25 QUE_Item "=QUEitems[25]"
	setcycle 26 QUE_Item "=QUEitems[26]"
	setcycle 27 QUE_Item "=QUEitems[27]"
	setcycle 28 QUE_Item "=QUEitems[28]"
	setcycle 29 QUE_Item "=QUEitems[29]"
	setcycle 30 QUE_Item "=QUEitems[30]"
	setcycle 31 QUE_Item "=QUEitems[31]"
	setcycle 32 QUE_Item "=QUEitems[32]"
	setcycle 33 QUE_Item "=QUEitems[33]"
	run QUE_trial

define sequence QUE_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mt_start_button always
	run mt_task always
	run logger always

define form_text_display QUEinst
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text המשך
	set margins "50;50;50;50"
	set form_title "<span size=36>הוראות</span>"
	__form_text__
	במסכים הבאים יוצגו לפניך מספר משפטים הנוגעים למאפיינים ולתכונות אישיות.
	המשפטים יוצגו במרכז המסך.
	יש לקרוא כל משפט ולשפוט את מידת ההסכמה או ההתנגדות אליו.
	יש להציב את סמן העכבר על הלחצן שמייצג את מידת ההסכמה שלך עם המשפט.
	בין כל משפט ומשפט, יש ללחוץ על 'המשך'.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set align right
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence RRT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blocks1 always
	run blocks2 always
	run blocks3_4 always
	run blocks5 always
	run blocks67 always

define inline_script adjITI_py
	set description "Executes Python code"
	___run__
	t_start = clock.time()
	
	iti = 750 - 5 #Desired ITI
	iti_overhead = t_start - t_endoftrial #Overhead time
	
	#extra ITI for the blank screen
	adjiti = iti - iti_overhead
	
	#Output times
	#print("adjITI")
	#print(adjiti)
	
	#print("total ITI")
	#print(adjiti + iti_overhead)
	
	#Actual sleep function to compensate for variable sequence preparation time.
	self.sleep(int(adjiti))
	
	#print("Elapsed: ")
	#print(clock.time() - t_endoftrial)
	__end__
	set _prepare ""

define form_text_input age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title Age
	set form_question "What is your age?"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop block1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Block1_seq
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order "practice;blockno"
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 blockno 1
	run Block1_seq

define sequence block1_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst1_1_f always
	run spacer always
	run inst1_2_f always

define sequence block1_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst1_1_m always
	run spacer always
	run inst1_2_m always

define loop block1_trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat "[repCount]"
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop block2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Block2_seq
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order "practice;blockno"
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 blockno 2
	run Block2_seq

define sequence block2_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst2_1_f_Atrue "=schighfirst==1"
	run inst2_1_f_Afalse "=schighfirst==0"
	run spacer always
	run inst2_2_f_Atrue "=schighfirst==1"
	run inst2_2_f_Afalse "=schighfirst==0"

define sequence block2_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst2_1_m_Atrue "=schighfirst==1"
	run inst2_1_m_Afalse "=schighfirst==0"
	run spacer always
	run inst2_2_m_Atrue "=schighfirst==1"
	run inst2_2_m_Afalse "=schighfirst==0"

define loop block2_trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat "[repCount]"
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop block3_4
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item Block3_seq
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set column_order "practice;blockno"
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 blockno 3
	setcycle 1 practice no
	setcycle 1 blockno 4
	run Block3_seq

define sequence block3_4_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst34_f_Atrue "=schighfirst==1"
	run inst34_f_Afalse "=schighfirst==0"

define sequence block3_4_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst34_m_Atrue "=schighfirst==1"
	run inst34_m_Afalse "=schighfirst==0"

define loop block3_trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat "[repCount]"
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop block5
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Block5_seq
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order "practice;blockno"
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 blockno 5
	run Block5_seq

define sequence block5_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst5_1_f_Atrue "=schighfirst==0"
	run inst5_1_f_Afalse "=schighfirst==1"
	run spacer always
	run inst5_2_f_Atrue "=schighfirst==0"
	run inst5_2_f_Afalse "=schighfirst==1"

define sequence block5_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst5_1_m_Atrue "=schighfirst==0"
	run inst5_1_m_Afalse "=schighfirst==1"
	run spacer always
	run inst5_2_m_Atrue "=schighfirst==0"
	run inst5_2_m_Afalse "=schighfirst==1"

define loop block5_trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat "[repCount]"
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop block6_7
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item Block6_seq
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set column_order "practice;blockno"
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 blockno 6
	setcycle 1 practice no
	setcycle 1 blockno 7
	run Block6_seq

define sequence block6_7_female
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst67_f_Atrue "=schighfirst==0"
	run inst67_f_Afalse "=schighfirst==1"

define sequence block6_7_male
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst67_m_Atrue "=schighfirst==0"
	run inst67_m_Afalse "=schighfirst==1"

define loop block6_trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat "[repCount]"
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define sequence blocks1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block1_female "=sex==u'female'"
	run block1_male "=sex==u'male'"
	run spacer always
	run block1 always

define sequence blocks2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block2_male "=sex==u'male'"
	run block2_female "=sex==u'female'"
	run spacer always
	run block2 always

define sequence blocks3_4
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block3_4_female "=sex==u'female'"
	run block3_4_male "=sex==u'male'"
	run spacer always
	run block3_4 always

define sequence blocks5
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block5_female "=sex==u'female'"
	run block5_male "=sex==u'male'"
	run spacer always
	run block5 always

define sequence blocks67
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block6_7_male "=sex==u'male'"
	run block6_7_female "=sex==u'female'"
	run spacer always
	run block6_7 always

define inline_script check_for_second_chance
	set description "Executes Python code"
	___run__
	# First, check whether the response was correct by using the
	# built-in OpenSesame variable 'correct', It has the
	# value 1 if the most recent response was correct, and the
	# value 0 if it was incorrect.
	# We retrieve this variable by using the experiment function
	# 'self.get()'.
	# If the response was correct, we DON'T need to run the 'second
	# chance' items:
	
	# If the response was correct, we DON'T need to run the 'second
	# chance' items:
	if self.get("correct") == 1:
		exp.set("second_chance", 'no')
	
	# If the response was incorrect, we DO need to run the 'second
	# chance items:
	elif self.get("correct") == 0:
		exp.set("second_chance", 'yes')
	__end__
	set _prepare ""

define inline_script define_functions
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	def exrandom(array, length):
	#   exuastive sampling from a list. if the length of the new list is greater
	#   than the length of the original list, the original list is reshuffeled and
	#   added again. this minimizes duplicates in the final list.
	#   Usage: exrandom(array, int length)
	   temp_array = []
	   out_array = []
	   temp_array.extend(array)
	   random.shuffle(temp_array)
	   #take care of the modulo first
	   for i in range(0,length%len(array)):
		   out_array.append(temp_array.pop(1))
	   length = length - length%len(array)
	
	#   now let's deal with the integer division
	#   this runs even if the integer division == 0, but then extends the list by 0
	   while length >= len(array):
		  temp_array = []
		  temp_array.extend(array)
		  random.shuffle(temp_array)
		  out_array.extend(temp_array)
		  length = length - len(array)
	
	   out_array.reverse()
	   
	   return out_array;
	   
	def splitLines(stim,limit):
	#   split the stim to two lines, slice at the middle space, if the stim is more than 'limit' char long.
	#   Usage: name of var for first line, name of var for second line = splitLines(input stim,char limit criterion to split)
	#   Usually: lineA , lineB =  splitLines(stim,40)
	   outA = u' '
	   outB = u' '
	   inStim = stim
	   inStimHalfLen = len(inStim)/2
	   if len(inStim)<=limit:
		   outA = inStim
		   outB = u' '
	   else:
		   #get all indexs of ' ', if they are after the half of the stim, so lineB would be shorter then lineA.
		  spacesRelativeMiddle = [i - inStimHalfLen for i, ltr in enumerate(inStim) if ltr == u' ' and (i - inStimHalfLen)>=0]
		  outA = inStim[:min(spacesRelativeMiddle)+inStimHalfLen]
		  outB = inStim[min(spacesRelativeMiddle)+inStimHalfLen:]
	   
	   return outA , outB
	__end__

define form_text_input email
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var email
	set form_title email
	set form_question " Please enter your email address"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad end
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="הגעת לסוף המטלה.<br /><br />תודה על השתתפותך בניסוי." x=0 y=0 z_index=0

define keyboard_response end_y
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses y

define sketchpad endoftrial
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catTrue]" x=384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catFalse]" x=-384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'q'" x=-384 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'p'" x=384 y=-320 z_index=0

define inline_script endoftrial_py
	set description "Executes Python code"
	___run__
	t_endoftrial = clock.time()
	trialCounter = trialCounter + 1
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_order_by_Sub_nr always
	run define_functions always
	run new_form_consent always
	run age always
	run DominantHand always
	run id4digits always
	run gender always
	run email always
	run logger always
	run init_stim always
	run RRT always
	run DEQ6_seq always
	run make_sure_real_end always
	run end always
	run end_y always
	run logger always

define keyboard_response first_chance_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response]"
	set allowed_responses "p;q"

define sketchpad first_chance_stim
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_a]" x=0 y=-24 z_index=0
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_b]" x=0 y=24 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catTrue]" x=384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catFalse]" x=-384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'q'" x=-384 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'p'" x=384 y=-320 z_index=0

define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question "What is your gender?"
	__options__
	Male
	Female
	__end__
	set margins "50;50;50;50"
	set form_var sex
	set form_title Gender
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_text_input id4digits
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var id4dig
	set form_title "תעודת זהות"
	set form_question "Please enter the last four digits of you ID number"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_script init_iti_stim_1
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	
	var.repCount =len(arrayStim)
	__end__
	___prepare__
	# in this block we have 5 'true' words and 5 'false' words, each word is displyed 4 times.
	
	arrayblock1_source = []
	arrayblock1_source.extend(arrayTrue)
	arrayblock1_source.extend(arrayFalse)
	
	arrayStim = exrandom(arrayblock1_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_2
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 5 'true' props and 5 'false' props, each prop is displyed 4 times.
	
	arrayblock2_source = []
	arrayblock2_source.extend(arrayATrue)
	arrayblock2_source.extend(arrayAFalse)
	
	arrayStim = exrandom(arrayblock2_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_34
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 5 'true' props, 5 'false' props, 5 true words and 5 false words. each stimis displyed twice.
	
	arrayblock34_source = []
	arrayblock34_source.extend(arrayATrue)
	arrayblock34_source.extend(arrayAFalse)
	arrayblock34_source.extend(arrayFalse)
	arrayblock34_source.extend(arrayTrue)
	
	arrayStim = exrandom(arrayblock34_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_5
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 10 'true' props and 10 'false' props, each prop is displyed twice.
	
	arrayblock5_source = []
	arrayblock5_source.extend(arrayATrue)
	arrayblock5_source.extend(arrayAFalse)
	
	arrayStim = exrandom(arrayblock5_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_iti_stim_67
	set description "Executes Python code"
	___run__
	t_start = t_endoftrial = clock.time()
	__end__
	___prepare__
	# in this block we have 5 'true' props, 5 'false' props, 5 true words and 5 false words. each stimis displyed twice.
	
	arrayblock67_source = []
	arrayblock67_source.extend(arrayATrue)
	arrayblock67_source.extend(arrayAFalse)
	arrayblock67_source.extend(arrayFalse)
	arrayblock67_source.extend(arrayTrue)
	
	arrayStim = exrandom(arrayblock67_source,40)
	
	trialCounter = 1
	__end__

define inline_script init_stim
	set description "Executes Python code"
	___run__
	#gender specific items:
	if var.sex == u'Male':
	 sex = u'male'
	 var.propAtrue1 = u'יש לי נטייה להיות מאוד ביקורתי כלפי עצמי'  
	 var.propAfalse1 = u'אין לי נטייה להיות מאוד ביקורתי כלפי עצמי'
	 
	if var.sex == u'Female':
	 sex = u'female'
	 var.propAtrue1 = u'יש לי נטייה להיות מאוד ביקורתית כלפי עצמי' 
	 var.propAfalse1 = u'אין לי נטייה להיות מאוד ביקורתית כלפי עצמי'
	
	arrayATrue = [var.propAtrue1, var.propAtrue2,var.propAtrue3, var.propAtrue4, var.propAtrue5]
	arrayAFalse = [var.propAfalse1, var.propAfalse2,var.propAfalse3, var.propAfalse4, var.propAfalse5]
	__end__
	___prepare__
	var.catTrue = u'אמת'
	var.catFalse = u'שקר'
	
	var.true1 = u'נכון'
	var.true2 = u'יושר'
	var.true3 = u'צודק'
	var.true4 = u'מדויק'
	var.true5 = u'ודאי'
	var.false1 = u'שגוי'
	var.false2 = u'טעות'
	var.false3 = u'רמאות'
	var.false4 = u'זיוף'
	var.false5 = u'שיבוש'
	
	var.propA = u"high SC" #these values are not displayed, only logged for convinience..
	var.propB = u"low SC"
	
	var.trueColor = u'orange'
	var.propColor = u'blue'
	
	#propositions are split to two lines later.
	#gender specific items are set at 'run'
	#non-gender specific items:
	var.propAtrue2 = u'קיים הבדל ניכר בין איך שאני היום ואיך שהייתי רוצה להיות'
	var.propAtrue3 = u'אני נוטה לא להיות מרוצה ממה שיש לי'
	var.propAtrue4 = u'קשה לי לקבל את החולשות שלי'
	var.propAtrue5 = u'לעיתים קרובות אני משווה את עצמי לסטנדרטים או מטרות'
	
	var.propAfalse2 = u'אין הבדל ניכר בין איך שאני היום ואיך שהייתי רוצה להיות'
	var.propAfalse3 = u'אני נוטה להיות מרוצה ממה שיש לי'
	var.propAfalse4 = u'לא קשה לי לקבל את החולשות שלי'
	var.propAfalse5 = u'רק לעיתים רחוקות אני משווה את עצמי לסטנדרטים או מטרות'
	
	arrayTrue = [var.true1, var.true2,var.true3, var.true4, var.true5]
	arrayFalse = [var.false1, var.false2,var.false3, var.false4, var.false5]
	__end__

define sketchpad inst1_1_f
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_1f.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst1_1_m
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_1m.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst1_2_f
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_2f.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst1_2_m
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst1_2m.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_1_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst2_1m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst2_2_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst34_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst34_m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_1_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst5_1m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst5_2_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst25_2m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_f_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_f_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_f_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_f_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_m_Afalse
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_m_afalse.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad inst67_m_Atrue
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="inst67_m_atrue.PNG" scale=1 show_if=always x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script make_sure_real_end
	set description "Executes Python code"
	___run__
	print("real end")
	var.realend = 1
	__end__
	set _prepare ""

define form_text_display mt_start_button
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text המשך
	set margins "50;50;50;50"
	__form_text__
	על מנת להמשיך יש ללחוץ על 'המשך'
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set align right
	set _theme gray
	widget 0 0 3 1 label text="  "
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define mousetrap_form mt_task
	__warning_message__
	widget 3 5 4 1 label text="<span size=32 color='red'>יש להזיז את הסמן</span>"
	__end__
	set update_feedback yes
	set timeout infinite
	set start_unit grid
	set start_coordinates "5.0;7.78"
	set spacing 0
	set skip_item no
	set save_trajectories yes
	set rows 9
	set reset_mouse yes
	set only_render no
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set margins "0;0;0;0"
	set logging_resolution 10
	set focus_widget None
	set description "Tracks mouse movements in custom form defined using OpenSesame script"
	set correct_button ""
	set cols 10
	set click_required no
	set check_initiation_time yes
	set _theme plain
	widget 1 4 8 1 label text="[QUE_Item]"
	widget 0 0 1 1 button text="[L2]"
	widget 3 0 1 1 button text="[L1]"
	widget 6 0 1 1 button text="[R1]"
	widget 9 0 1 1 button text="[R2]"


define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>טופס הסכמה</span>"
	__form_text__
	<span size=14>
	שלום רב,
	אנו מודים לך על נכונותך לקחת חלק במחקר. השתתפותך הינה משמעותית ותורמת רבות להבנת נושא חשוב זה. 
	הניסוי מתקיים בשתי פגישות, כאשר משך כל אחת מהן הוא כ-20 דקות.
	במהלך הניסוי תתבקש לבצע מטלות ממוחשבות שונות, וכן למלא שאלונים שונים, הכוללים פריטים אודות תחושות,
	חוויות או אירועים שאנשים חווים לעיתים ושאלות אודות מאפייני אישיות שונים.
	חלק מהשאלות הינן בעלות אופי אישי ונשמח אם תוכל/י לענות בצורה כנה ככל האפשר.
	חשוב להדגיש שוב כי הנתונים שיאספו הם חסויים ויהיו גלויים רק לעורכי המחקר.
	במידה ותהיינה שאלות במהלך המחקר את/ה מוזמנ/ת לפנות למיכאל פינוס. כמו כן, במידה והמחקר יגרום לך לסבל או
	יפגע ברגשותיך תוכל/י להפסיק את ההשתתפות בו בכל שלב. התשלום שתקבל/י יהיה פרופורציונאלי למשך השתתפותך. 
	
	חשוב לנו להזכיר כי אחד משאלוני המחקר, הקרוי BSI, כולל שאלה על מחשבות אובדניות ושאלה אחת על כוונות פגיעה
	באחרים. באם תדווח/י כי את/ה חווה מחשבות וכוונות אלה בעוצמה רבה, עורכי המחקר יצרו עמך קשר בכדי לברר את
	חומרת המחשבות והכוונות הללו. במקרה של סכנה חמורה ומיידית, נאלץ להתערב בכדי למנוע בפגיעה בעצמך או באדם
	אחר. כמו כן, אם את/ה חש/ה כי המחקר גורם לך למצוקה ניתן ואף רצוי לפנות לפרופ' גולן שחר, בטלפון 08-6472057.
	תודה רבה!
	מיכאל פינוס, pinusm@post.bgu.ac.il
	פרופ' גולן שחר, shaharg@bgu.ac.il
	ד"ר יואב בר-ענן, baranany@bgu.ac.il
	</span>
	__end__
	set decline_text "אני לא מסכימ/ה"
	set decline_message "אנא קרא/י לנסיינית"
	set cols "2;2"
	set checkbox_text "קראתי והבנתי את האמור לעיל"
	set align right
	set accept_text "אני מסכימ/ה"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=yes text="[form_text]"
	widget 1 2 1 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define inline_script pickStim
	set description "Executes Python code"
	set _run ""
	___prepare__
	stim_word_a, stim_word_b = splitLines(arrayStim[trialCounter-1],40)
	
	var.stim_word_a = stim_word_a
	var.stim_word_b = stim_word_b
	
	#general, but also for block1
	if arrayStim[trialCounter-1] in arrayTrue:
		var.correct_response = u'p'
		var.stim_color = var.trueColor
	if arrayStim[trialCounter-1] in arrayFalse:
		var.correct_response = u'q'
		var.stim_color = var.trueColor
	
	#for block2 ,block34
	if var.blockno in [2,3,4]:
		if var.schighfirst == 1:
			var.trueProp = var.propA
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-true prop is displayed the correct response is P
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-false prop is displayed the correct response is Q
			
		elif var.schighfirst == 0:
			var.trueProp = var.propB
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-true prop is displayed the correct response is Q
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-false prop is displayed the correct response is P
				
				
	#for block5 ,block67
	elif var.blockno in [5,6,7]:
		if var.schighfirst == 0:
			var.trueProp = var.propA
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-true prop is displayed the correct response is P
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-false prop is displayed the correct response is Q
				
		elif var.schighfirst == 1:
			var.trueProp = var.propB
			if arrayStim[trialCounter-1] in arrayATrue:
				var.stim_color = var.propColor
				var.correct_response = u'q' #when a propA-true prop is displayed the correct response is Q
			if arrayStim[trialCounter-1] in arrayAFalse:
				var.stim_color = var.propColor
				var.correct_response = u'p' #when a propA-false prop is displayed the correct response is P
	__end__

define keyboard_response second_chance_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "[correct_response]"

define sketchpad second_chance_stim
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text=X x=0 y=208 z_index=0
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_a]" x=0 y=-24 z_index=0
	draw textline center=1 color="[stim_color]" font_bold=no font_family=hebrew font_italic=no font_size=48 html=yes show_if=always text="[stim_word_b]" x=0 y=24 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catTrue]" x=384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=32 html=yes show_if=always text="[catFalse]" x=-384 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'q'" x=-384 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=hebrew font_italic=no font_size=24 html=yes show_if=always text="'p'" x=384 y=-320 z_index=0

define inline_script set_QUE_gender
	set description "Executes Python code"
	___run__
	#gender specific DEQ6:
	DEQitems = []
	if sex == u'male':
	 var.R2 = u'במידה רבה מסכים'
	 var.R1 = u'מסכים'
	 var.L1 = u'מתנגד'
	 var.L2 = u'במידה רבה מתנגד'
	 DEQitems = [
	 u'לעיתים קרובות אני מוצא כי אינני חי בהתאם לסטנדרטים או לאידאלים שלי'
	 , u'קיים הבדל ניכר בין איך שאני היום לבין איך שהייתי רוצה להיות'
	 , u'אני נוטה לא להיות מרוצה ממה שיש לי'
	 , u'קשה לי לקבל את החולשות שלי'
	 , u'יש לי נטייה להיות מאד ביקורתי כלפי עצמי'
	 , u'לעיתים קרובות אני משווה את עצמי לסטנדרטים או מטרות'
	 ]
	 SEitems = [
	 u'אני מרגיש שאני אדם בעל ערך, לפחות כמו אנשים אחרים'
	 , u'אני מרגיש שיש לי מספר תכונות טובות'
	 , u'סך הכל, אני נוטה להרגיש שאני כישלון'
	 , u'אני מסוגל לעשות דברים כמו רב האנשים'
	 , u'אני מרגיש שאין לי הרבה דברים להתגאות בהם'
	 , u'אני נוקט בגישה חיובית כלפי עצמי'
	 , u'באופן כללי, אני מרוצה מעצמי'
	 , u'הלוואי והיה לי יותר כבוד כלפי עצמי'
	 , u'אני בהחלט מרגיש חסר תועלת לעיתים'
	 , u'לעיתים אני חושב שאני לא שווה כלל'
	 ]
	 FSCRSitems = [
	 u'כאשר דברים לא מצליחים לי אני מתאכזב מעצמי בקלות'
	 , u'כאשר דברים לא מצליחים לי יש בי חלק ש"יורד" על עצמי'
	 , u'כאשר דברים לא מצליחים לי אני יכול להזכיר לעצמי שיש בי צדדים חיוביים'
	 , u'כאשר דברים לא מצליחים לי אני מתקשה לשלוט ברגשות של כעס ותסכול שיש לי כלפי עצמי'
	 , u'כאשר דברים לא מצליחים לי קל לי לסלוח לעצמי'
	 , u'כאשר דברים לא מצליחים לי יש בי חלק שמרגיש שאני לא מספיק טוב'
	 , u'כאשר דברים לא מצליחים לי אני מרגיש מובס ומוכה על ידי מחשבות ביקורתיות כלפי עצמי'
	 , u'כאשר דברים לא מצליחים לי אני ממשיך לאהוב להיות אני'
	 , u'כאשר דברים לא מצליחים לי אני כל כל כועס על עצמי שאני מרגיש צורך לפגוע או לפצוע בעצמי'
	 , u'כאשר דברים לא מצליחים לי יש לי תחושה של גועל מעצמי'
	 , u'כאשר דברים לא מצליחים לי אני עדיין מסוגל להרגיש נאהב ומקובל'
	 , u'כאשר דברים לא מצליחים לי מפסיק להיות איכפת לי מעצמי'
	 , u'כאשר דברים לא מצליחים לי אני מרגיש שקל לי לאהוב את עצמי'
	 , u'כאשר דברים לא מצליחים לי אני נזכר בכישלונות שלי ולא מפסיק לחשוב עליהם'
	 , u'כאשר דברים לא מצליחים לי אני מכנה את עצמי בשמות'
	 , u'כאשר דברים לא מצליחים לי אני עדין ותומך בעצמי'
	 , u'כאשר דברים לא מצליחים לי אינני מסוגל לקבל כשלונות מבלי להרגיש לקוי או פגום'
	 , u'כאשר דברים לא מצליחים לי אני מאמין שביקורת עצמית מגיעה לי'
	 , u'כאשר דברים לא מצליחים לי אני מסוגל לטפל ולדאוג לעצמי'
	 , u'כאשר דברים לא מצליחים לי יש בי חלק שרוצה להיפטר מהחלקים שאני לא אוהב בעצמי'
	 , u'כאשר דברים לא מצליחים לי אני מעודד את עצמי לקראת העתיד'
	 , u'כאשר דברים לא מצליחים לי אני לא אוהב להיות אני'
	 ]
	
	
	if sex == u'female':
	 var.R2 = u'במידה רבה מסכימה'
	 var.R1 = u'מסכימה'
	 var.L1 = u'מתנגדת'
	 var.L2 = u'במידה רבה מתנגדת'
	 DEQitems = [
	 u'לעיתים קרובות אני מוצאת כי אינני חיה בהתאם לסטנדרטים או לאידאלים שלי'
	 , u'קיים הבדל ניכר בין איך שאני היום לבין איך שהייתי רוצה להיות'
	 , u'אני נוטה לא להיות מרוצה ממה שיש לי'
	 , u'קשה לי לקבל את החולשות שלי'
	 , u'יש לי נטייה להיות מאד ביקורתית כלפי עצמי'
	 , u'לעיתים קרובות אני משווה את עצמי לסטנדרטים או מטרות'
	 ]
	 SEitems = [
	 u'אני מרגישה שאני אדם בעל ערך, לפחות כמו אנשים אחרים'
	 , u'אני מרגישה שיש לי מספר תכונות טובות'
	 , u'סך הכל, אני נוטה להרגיש שאני כישלון'
	 , u'אני מסוגלת לעשות דברים כמו רב האנשים'
	 , u'אני מרגישה שאין לי הרבה דברים להתגאות בהם'
	 , u'אני נוקטת בגישה חיובית כלפי עצמי'
	 , u'באופן כללי, אני מרוצה מעצמי'
	 , u'הלוואי והיה לי יותר כבוד כלפי עצמי'
	 , u'אני בהחלט מרגישה חסרת תועלת לעיתים'
	 , u'לעיתים אני חושבת שאני לא שווה כלל'
	 ]
	 FSCRSitems = [
	 u'כאשר דברים לא מצליחים לי אני מתאכזבת מעצמי בקלות'
	 , u'כאשר דברים לא מצליחים לי יש בי חלק ש"יורד" על עצמי'
	 , u'כאשר דברים לא מצליחים לי אני יכולה להזכיר לעצמי שיש בי צדדים חיוביים'
	 , u'כאשר דברים לא מצליחים לי אני מתקשה לשלוט ברגשות של כעס ותסכול שיש לי כלפי עצמי'
	 , u'כאשר דברים לא מצליחים לי קל לי לסלוח לעצמי'
	 , u'כאשר דברים לא מצליחים לי יש בי חלק שמרגיש שאני לא מספיק טובה'
	 , u'כאשר דברים לא מצליחים לי אני מרגישה מובסת ומוכה על ידי מחשבות ביקורתיות כלפי עצמי'
	 , u'כאשר דברים לא מצליחים לי אני ממשיכה לאהוב להיות אני'
	 , u'כאשר דברים לא מצליחים לי אני כל כל כועסת על עצמי שאני מרגישה צורך לפגוע או לפצוע בעצמי'
	 , u'כאשר דברים לא מצליחים לי יש לי תחושה של גועל מעצמי'
	 , u'כאשר דברים לא מצליחים לי אני עדיין מסוגלת להרגיש נאהבת ומקובלת'
	 , u'כאשר דברים לא מצליחים לי מפסיק להיות איכפת לי מעצמי'
	 , u'כאשר דברים לא מצליחים לי אני מרגישה שקל לי לאהוב את עצמי'
	 , u'כאשר דברים לא מצליחים לי אני נזכרת בכישלונות שלי ולא מפסיקה לחשוב עליהם'
	 , u'כאשר דברים לא מצליחים לי אני מכנה את עצמי בשמות'
	 , u'כאשר דברים לא מצליחים לי אני עדינה ותומכת בעצמי'
	 , u'כאשר דברים לא מצליחים לי אינני מסוגלת לקבל כשלונות מבלי להרגיש לקויה או פגומה'
	 , u'כאשר דברים לא מצליחים לי אני מאמינה שביקורת עצמית מגיעה לי'
	 , u'כאשר דברים לא מצליחים לי אני מסוגלת לטפל ולדאוג לעצמי'
	 , u'כאשר דברים לא מצליחים לי יש בי חלק שרוצה להיפטר מהחלקים שאני לא אוהבת בעצמי'
	 , u'כאשר דברים לא מצליחים לי אני מעודדת את עצמי לקראת העתיד'
	 , u'כאשר דברים לא מצליחים לי אני לא אוהבת להיות אני'
	 ] 
	 
	# randomization is more advanced than what OpenSesame can offer,
	# so I'll do it here.. I want the SE items first, in randomized order.
	# then the FSCRS and DEQ6 items (each DEQ6 item will  appear twice),
	# in random order.
	
	#create empty arrays
	QUEitems = []
	SCitems = []
	#create a within-it-self shuffeld array of  FSCRS and DEQ6 items (each DEQ6 item appears twice)
	#exrandom() is probably redundent here...
	SCitems.extend(exrandom(DEQitems,2*len(DEQitems)))
	SCitems.extend(exrandom(FSCRSitems,len(FSCRSitems)))
	#create array for the OpenSesame loop, where the SE items are first, in randomized order,
	# then the FSCRS and DEQ6 items (each DEQ6 iitem twice)
	QUEitems.extend(exrandom(SEitems, len(SEitems)))
	QUEitems.extend(exrandom(SCitems, len(SCitems)))
	
	 
	__end__
	set _prepare "import random"

define inline_script set_order_by_Sub_nr
	set description "Executes Python code"
	set _run ""
	___prepare__
	#set order of propositions trueness by modulo of 2 (equal to by parity of subject_nr, but easier to scale this way)
	if var.subject_nr%2 == 1: #this is the result of 'quickrun' mode
		schighfirst = 1 #SelfCritHighFirst
	else:
		schighfirst = 0
	
	
	var.schighfirst = schighfirst	
	print(var.schighfirst)
	__end__

define keyboard_response spacer
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run pickStim always
	run adjITI_py always
	run first_chance_stim always
	run first_chance_response always
	run check_for_second_chance always
	run second_chance_stim "[second_chance]=yes"
	run second_chance_response "[second_chance]=yes"
	run endoftrial always
	run endoftrial_py always
	run logger always

